alias,pop,parent,dims,gating_method,gating_args,collapseDataForGating,groupBy,preprocessing_method,preprocessing_args
Cells,+,root,"FSC-A,SSC-A",gate_draw,"gate = list(new('filters', .Data = list(new('polygonGate', boundaries = structure(c(22400.8156925989, 43524.9203696269, 147561.13590399, 123268.415525408, 63064.7171958778, 39819.1394902979, -2289.88063829953, 18764.6294259992, 115501.567559263, 119484.853247104), .Dim = c(5L, 2L), .Dimnames = list(NULL, c('FSC-A', 'SSC-A'))), parameters = new('parameters', .Data = list(new('unitytransform',     .Data = function ()     NULL, parameters = 'FSC-A', transformationId = 'defaultUnityTransform'),     new('unitytransform', .Data = function ()     NULL, parameters = 'SSC-A', transformationId = 'defaultUnityTransform'))),     filterId = 'Cells'))))",TRUE,4,pp_gate_draw,NA
Single Cells,+,Cells,"FSC-A,FSC-H",gate_draw,"gate = list(new('filters', .Data = list(new('polygonGate', boundaries = structure(c(14479.2764387134, 19760.3026079704, 155482.675157875, 142280.109734733, 22747.9151138395, 9090.93561267274, 114363.485934166, 145091.689811791), .Dim = c(4L, 2L), .Dimnames = list(NULL, c('FSC-A', 'FSC-H'))), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'FSC-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = 'FSC-H', transformationId = 'defaultUnityTransform'))),     filterId = 'Single Cells'))))",TRUE,4,pp_gate_draw,NA
Live Cells,+,Single Cells,"Alexa Fluor 405-A,Alexa Fluor 430-A",gate_draw,"gate = list(new('filters', .Data = list(new('rectangleGate', min = c('Alexa Fluor 405-A' = -Inf, 'Alexa Fluor 430-A' = -Inf), max = c('Alexa Fluor 405-A' = 2.23471278003462, 'Alexa Fluor 430-A' = 2.10247040586047), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 405-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = 'Alexa Fluor 430-A', transformationId = 'defaultUnityTransform'))),     filterId = 'Live Cells'))))",TRUE,4,pp_gate_draw,NA
T Cells,+,Live Cells,PE-A,gate_draw,"gate = list(new('filters', .Data = list(new('rectangleGate', min = c('PE-A' = 2.32576495536664),     max = c('PE-A' = 4.64253697214796), parameters = new('parameters',         .Data = list(new('unitytransform', .Data = function ()         NULL, parameters = 'PE-A', transformationId = 'defaultUnityTransform'))),     filterId = 'T Cells'))))",TRUE,4,pp_gate_draw,NA
CD4 T Cells,+,T Cells,"Alexa Fluor 700-A,Alexa Fluor 488-A",gate_draw,"gate = list(new('filters', .Data = list(new('rectangleGate', min = c('Alexa Fluor 700-A' = 1.78581143539398, 'Alexa Fluor 488-A' = -0.230378902289022), max = c('Alexa Fluor 700-A' = 3.57822301935939, 'Alexa Fluor 488-A' = 2.09156924086911), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 700-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = 'Alexa Fluor 488-A', transformationId = 'defaultUnityTransform'))),     filterId = 'CD4 T Cells'))))",TRUE,4,pp_gate_draw,NA
CD8 T Cells,+,T Cells,"Alexa Fluor 700-A,Alexa Fluor 488-A",gate_draw,"gate = list(new('filters', .Data = list(new('rectangleGate', min = c('Alexa Fluor 700-A' = -0.34599169109743, 'Alexa Fluor 488-A' = 2.20058089078264), max = c('Alexa Fluor 700-A' = 1.97671917806485, 'Alexa Fluor 488-A' = 4.05377893931261), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 700-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = 'Alexa Fluor 488-A', transformationId = 'defaultUnityTransform'))),     filterId = 'CD8 T Cells'))))",TRUE,4,pp_gate_draw,NA
