alias,pop,parent,dims,gating_method,gating_args,collapseDataForGating,groupBy,preprocessing_method,preprocessing_args
Cells,+,root,"FSC-A,SSC-A",manualGate,"gate = new('ellipsoidGate', mean = c('FSC-A' = 61967.5528129807, 'SSC-A' = 20089.2592150686), cov = structure(c(551142014.301849, 19134895.2616998, 19134895.2616998, 356917098.708032), .Dim = c(2L, 2L), .Dimnames = list(c('FSC-A', 'SSC-A'), c('FSC-A', 'SSC-A'))), distance = 1, parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'FSC-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = 'SSC-A', transformationId = 'defaultUnityTransform'))),     filterId = 'Cells')",,,,
Single Cells,+,Cells,"FSC-A,FSC-H",manualGate,"gate = new('polygonGate', boundaries = structure(c(16110.0645595266, 20294.2989168406, 267629.040926953, 267629.040926953, 26539.1512151791, 15293.6489450115, 181834.182565113, 240203.694348364), .Dim = c(4L, 2L), .Dimnames = list(NULL, c('FSC-A', 'FSC-H'))), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'FSC-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = 'FSC-H', transformationId = 'defaultUnityTransform'))),     filterId = 'Single Cells')",,,,
Live Cells,+,Single Cells,"Alexa Fluor 405-A,Alexa Fluor 430-A",manualGate,"gate = new('rectangleGate', min = c('Alexa Fluor 405-A' = -Inf, 'Alexa Fluor 430-A' = -Inf), max = c('Alexa Fluor 405-A' = 2.13178781662599, 'Alexa Fluor 430-A' = 2.02386644046332), parameters = new('parameters', .Data = list(new('unitytransform',     .Data = function ()     NULL, parameters = 'Alexa Fluor 405-A', transformationId = 'defaultUnityTransform'),     new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 430-A', transformationId = 'defaultUnityTransform'))),     filterId = 'Live Cells')",,,,
T Cells,+,Live Cells,PE-A,manualGate,"gate = new('rectangleGate', min = c('PE-A' = 2.98122060862081), max = c('PE-A' = 3.64852863902013),     parameters = new('parameters', .Data = list(new('unitytransform',         .Data = function ()         NULL, parameters = 'PE-A', transformationId = 'defaultUnityTransform'))),     filterId = 'T Cells')",,,,
CD4 T Cells,+,T Cells,"Alexa Fluor 700-A,Alexa Fluor 488-A",manualGate,"gate = new('rectangleGate', min = c('Alexa Fluor 700-A' = 1.74739112681367, 'Alexa Fluor 488-A' = 0.011641834143331), max = c('Alexa Fluor 700-A' = 3.23126272496577, 'Alexa Fluor 488-A' = 2.08140704801947), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 700-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = 'Alexa Fluor 488-A', transformationId = 'defaultUnityTransform'))),     filterId = 'CD4 T Cells')",,,,
CD8 T Cells,+,T Cells,"Alexa Fluor 700-A,Alexa Fluor 488-A",manualGate,"gate = new('rectangleGate', min = c('Alexa Fluor 700-A' = -0.35049630505655, 'Alexa Fluor 488-A' = 2.23778930862344), max = c('Alexa Fluor 700-A' = 1.95206307138637, 'Alexa Fluor 488-A' = 4.06838165334056), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 700-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = 'Alexa Fluor 488-A', transformationId = 'defaultUnityTransform'))),     filterId = 'CD8 T Cells')",,,,
